PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999):03d}"', 'session': '001', 'nBlocks': '4'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = ANT
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Welcome
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    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Te damos la bienvenida.

        En seguida te presentaremos un questionario y una tarea de tiempos de reacción.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_welcome
      Code Type = Auto->JS
      Before Experiment:
        import hashlib
        from pathlib import Path
      Begin Experiment:
        n_blocks = int(expInfo['nBlocks'])
        assert 1 <= n_blocks <= 10, "nBlocks must be between 1 and 10"

        # Numeric participant IDs (e.g. "042") map directly to schedules/042.csv.
        # Non-numeric IDs (e.g. "pilot") hash deterministically to a 3-digit code.
        participant_str = str(expInfo['participant'])
        try:
            participant_id = int(participant_str)
            assert 0 <= participant_id <= 999, "numeric participant must be 0..999"
        except ValueError:
            h = hashlib.md5(participant_str.encode()).hexdigest()
            participant_id = int(h, 16) % 1000

        schedule_file = f"schedules/{participant_id:03d}.csv"
        assert Path(schedule_file).exists(), (
            f"missing {schedule_file}; run prerandomize.py first"
        )

        # Initialize loop-iteration vars at module scope so the BlockEnd routine's
        # skipIf and the trials loop's nReps see them during pre-loop flow, AND so
        # scheduleLoop's per-row injection (`globals()[paramName] = ...`) updates
        # the same names — assigning here directly would shadow the loop values.
        globals()['block'] = 0

        # Persistent fixation cross. Drawn via setAutoDraw(True) at the start of
        # each block (in code_fix on trials.thisN == 0) and turned off in
        # code_blockend. This keeps the cross visible without re-rendering per
        # routine, so the cross's appearance does not act as a per-trial temporal
        # cue — only the jittered fix_duration does.
        fixation_cross = visual.ShapeStim(
            win, name='fixation_cross', vertices='cross',
            size=(0.05, 0.05), units='height',
            fillColor='white', lineColor='white',
        )
  Routine Intro
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    TextComponent text_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Tarea ANT:
        Coloca tus dedos indices en las teclas F y J del teclado.
        Presiona la tecla correspondiente a la direccion de la flecha central.
        Ignora los distractores.

        Si la flecha central apunta a la derecha >:
        >>>>> Presiona J <<><<

        Si la flecha central apunta a la izquierda <:
        <<<<< Presiona F >><>>

        [Presiona barra espacadora para continuar...]
    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fix
    RoutineSettingsComponent Fix
      stopVal [duration (s)] = $fix_duration
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    PolygonComponent fix_timer
      fillColor = white
      opacity = 0
      shape = cross
      size = (0.001, 0.001)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_duration
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    CodeComponent code_fix
      Code Type = Auto->JS
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      Before Experiment:
        import random
      Begin Experiment:
        fix_duration = .400
      Begin Routine:
        fix_duration = .400 + random.uniform(0.0, 1.2)
        # Persistent fixation: drawn from the first trial of each block until
        # BlockEnd, so the cross does not blink off between trials and so the
        # variable fix_duration jitter is the only temporal cue.
        if trials.thisN == 0:
            fixation_cross.autoDraw = True
  Routine Cue
    RoutineSettingsComponent Cue
      stopVal [duration (s)] = 0.4
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    PolygonComponent cue_timer
      fillColor = white
      opacity = 0
      shape = cross
      size = (0.001, 0.001)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    TextComponent text_1_cue
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = *
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    TextComponent text_2_cue
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      text = *
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    CodeComponent code_cue
      Code Type = Py
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      Before Experiment:
        import numpy as np
      Begin Routine:
        if cue == "NC":
            cue_pos1 = [0.0,  1.5] # hide Cue_text_1
            cue_pos2 = [0.0, -1.5] # hide Cue_text_2
        elif cue == "CC":
        #    Position both cue texts at 0.0
            cue_pos1 = cue_pos2 = [0.0, 0.0]
        elif cue == "DC":
            cue_pos1 = [0.0,  .25]
            cue_pos2 = [0.0, -.25]
        elif cue == "SC":
            if np.random.rand() >= 0.5:
                cue_pos1 = cue_pos2 = [0.0,  .25]
            else:
                cue_pos1 = cue_pos2 = [0.0, -.25]
        text_1_cue.pos = cue_pos1
        text_2_cue.pos = cue_pos2
  Routine Target
    RoutineSettingsComponent Target
      stopVal [duration (s)] = 1.7
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    TextComponent text_target
      font = DejaVu Sans Mono
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.7
      text [set every repeat] = >>>>>
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    CodeComponent code_target
      Code Type = Py
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      Begin Routine:
        text_target.text = target
        if cue == "SC":
            p = np.sign(cue_pos1[1])
        else:
            p = np.random.choice([-1,1])

        text_target.pos = [0.0, p*0.25]
    KeyboardComponent key_resp_target
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
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    PolygonComponent Blank_cross
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine BlockEnd
    RoutineSettingsComponent BlockEnd
      skipIf = block > n_blocks
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    TextComponent text_BlockEnd
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $f"""Este es el final del bloque {block} de {n_blocks}.

        Puedes tomar una pausa.

        [Presiona barra espaciadora para continuar...]
        """
    KeyboardComponent key_resp_BlockEnd
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_blockend
      Code Type = Auto->JS
      Begin Routine:
        # Stop drawing the persistent fixation cross during the break, and
        # leave it off heading into End. code_fix re-enables it on the first
        # trial of the next block.
        fixation_cross.autoDraw = False
  Routine End
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    TextComponent text_end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Este es el fin de la prueba.

        ¡Gracias por participar!
  Routine Intro_FFMQ
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    TextComponent text_intro_ffmq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora te presentaremos una encuesta relacionada a atencion.
        Ésta consta de 39 preguntas.

        Elije la alternativa que mejor refleje el grado en que estás de acuerdo con cada uno de los enunciados que se indican a continuación. Cuando estés listo/a presiona la barra espaciadora para continuar.
    KeyboardComponent key_resp__intro_ffmq
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_ffmq
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    SliderComponent slider_ffmq
      forceEndRoutine = False
      granularity = 1
      labels = ["Nunca o muy raramente cierto", "Raramente cierto", "Algunas veces cierto", "A menudo cierto", "Muy a menudo o siempre cierto"] 
      letterHeight = 0.02
      pos = (0, -0.3)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    TextComponent text_ffmq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{question_number}: {question_text}"
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    KeyboardComponent key_resp_ffmq
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end_ffmq
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    TextComponent text_end_ffmq
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hasta aquí llega el cuestionario. En seguida te pediremos que realices una tarea.

        [Presiona la barra espaciadora para continuar...]
    KeyboardComponent key_resp_end_ffmq
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine Intro
  LoopInitiator scheduleLoop loopType="TrialHandler"
    conditions = []
    conditionsFile = $schedule_file
    loopType = sequential
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1 if block <= n_blocks else 0
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      conditions:
        [OrderedDict([('cue', 'NC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'CC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'DC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'SC'), ('target', '<<<<<'), ('correct', 'f')]),
        OrderedDict([('cue', 'NC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'CC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'DC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'SC'), ('target', '>>>>>'), ('correct', 'j')]),
        OrderedDict([('cue', 'NC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'CC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'DC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'SC'), ('target', '>><>>'), ('correct', 'f')]),
        OrderedDict([('cue', 'NC'), ('target', '<<><<'), ('correct', 'j')]),
        OrderedDict([('cue', 'CC'), ('target', '<<><<'), ('correct', 'j')]),
        OrderedDict([('cue', 'DC'), ('target', '<<><<'), ('correct', 'j')]),
        OrderedDict([('cue', 'SC'), ('target', '<<><<'), ('correct', 'j')])]
      Routine Fix
      Routine Cue
      Routine Target
    LoopTerminator trials
    Routine BlockEnd
  LoopTerminator scheduleLoop
  Routine End
